PsychoPy2experiment version="1.82.01"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'n_square': u'32', u'opacity': u'0.6', u'probeFrames': u'5', u'participant': u'test', u'premask': u'20', u'session': u'001', u'image_size': u'128', u'postmask': u'20'}
  Units = use prefs
  Screen = 1
  Window size (pixels) = [1280, 720]
  Save csv file = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = experiment
  Full-screen window = True
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Routines
  Routine premask
    GratingComponent premasking
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 - 1
      stopVal [duration (frames)] = $premask_dur
      pos = [0, -0]
      units = pix
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size, image_size)
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  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      text [set every repeat] = $resp_msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent response
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_cross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent blank_period
      stopVal [duration (s)] = $blank_dur
      startVal [condition] = $fixation_cross.status == FINISHED
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('probe_Frames',curr)
        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
            curr += np.random.choice([1,2,3],size=1)[0]
            if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
            curr -= 1
            if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
            curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
            if curr < 1: curr = 1
    TextComponent visibility_message
      text = ?
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent visible
      correctAns = '1'
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
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  Routine jitter1
    TextComponent jitter_delay
      text = +
      stopVal [duration (s)] = $jitter1_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine trial
    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
      Begin Routine:
        main_loop.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent presentation
      image [set every repeat] = $PATH
      startVal [time (s)] = 0.0
      size = $(image_size, image_size)
      units = pix
      opacity [set every repeat] = $opacity
      stopVal [duration (frames)] = $curr
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  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])

        curr = int(expInfo['probeFrames'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent first_blank
      stopVal [duration (s)] = 10
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_counter]
        main_loop.addData('jitter2',jitter2_delay_dur)
        jitter_counter += 1
      End Routine:
        meanacc = main_loop.data['response.corr'].mean()
        meanvis = main_loop.data['visible.corr'].mean()

        print('{}/{}, mean unconscious = {:.2f},frame = {},p(correct) = {:.2f}'.format(
                main_loop.thisN,main_loop.nTotal,
                meanvis,curr,meanacc))
    TextComponent post_jitter
      text = +
      stopVal [duration (s)] = $jitter2_delay_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 -1
      stopVal [duration (frames)] = postmask_dur
      units = pix
      startVal [time (s)] = 0.0
      sf = None
      size = $(image_size, image_size)
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = ..\data\sampled_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Category': 'animal', 'Mean_Familiarity': 4.4000000000000004, 'SD_Concreteness': 1.5307950004273383, 'Word': 'Abejorro', 'Mean_Arousal': 7.0789473684210531, 'Mean_Valence': 2.1315789473684208, 'SD_Familiarity': 2.4152294576982403, 'Length': 8, 'Frequency': 0.17999999999999999, 'blank_dur': 0.5824113692237568, 'picked': True, 'English': 'Bumblebee', 'log_frequency': -1.7147984280919266, 'PATH': '../stimuli_figure/Bumblebee.jpeg', 'Mean_Concreteness': 7.5199999999999996, 'SD_Arousal': 1.5833863633154823, 'SD_Valence': 1.3187023234692454},
      {'Category': 'animal', 'Mean_Familiarity': 4.2400000000000002, 'SD_Concreteness': 2.6223399220289245, 'Word': 'Almeja', 'Mean_Arousal': 3.4210526315789487, 'Mean_Valence': 4.9210526315789487, 'SD_Familiarity': 2.3853720883753127, 'Length': 6, 'Frequency': 0.54000000000000004, 'blank_dur': 0.69822153688040511, 'picked': True, 'English': 'Clam', 'log_frequency': -0.61618613942381706, 'PATH': '../stimuli_figure/Clam.jpeg', 'Mean_Concreteness': 6.7199999999999998, 'SD_Arousal': 1.7496189383941527, 'SD_Valence': 1.6986732334124204},
      {'Category': 'animal', 'Mean_Familiarity': 3.3199999999999998, 'SD_Concreteness': 1.943364779619789, 'Word': 'Asno', 'Mean_Arousal': 4.5263157894736841, 'Mean_Valence': 5.3157894736842106, 'SD_Familiarity': 2.3043437243605824, 'Length': 4, 'Frequency': 3.9300000000000002, 'blank_dur': 0.51138390864735073, 'picked': True, 'English': 'Donkey', 'log_frequency': 1.3686394258811698, 'PATH': '../stimuli_figure/Donkey.jpeg', 'Mean_Concreteness': 6.8799999999999999, 'SD_Arousal': 1.5894388284780532, 'SD_Valence': 1.6942711604969272},
      {'Category': 'animal', 'Mean_Familiarity': 3.4399999999999999, 'SD_Concreteness': 1.920937271229854, 'Word': 'Babosa', 'Mean_Arousal': 5.0789473684210513, 'Mean_Valence': 2.1315789473684208, 'SD_Familiarity': 2.2000000000000002, 'Length': 6, 'Frequency': 0.35999999999999999, 'blank_dur': 0.55274014853327014, 'picked': True, 'English': 'Slug', 'log_frequency': -1.0216512475319814, 'PATH': '../stimuli_figure/Slug.jpeg', 'Mean_Concreteness': 6.7599999999999998, 'SD_Arousal': 2.5296253215496805, 'SD_Valence': 1.3390406535939228}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
    Routine fixation
    Routine premask
    Routine trial
    Routine postmask
    Routine jitter1
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
